PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = pilot2exp_keyboard
  logging level = debug
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Routines
  Routine intro
    TextComponent welcome
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please consider this information carefully before deciding whether to participate in this research:

        We invite you to participate in a research study related to language.

        If you have read this form and have decided to participate in this experiment, please understand your participation is voluntary and you have the right to withdraw your consent or discontinue participation at any time. However, please note that in order to validate your participation you need to complete the experiment and wait until the results are sent (this should only take a few seconds); otherwise, we have no way to ensure that you participated at all. There are no risks or benefits of any kind involved in this study. You will be paid for your participation at the posted rate.

        Your participation in this study will remain confidential. Your individual privacy will be maintained in all published and written data resulting from the study. You may print this form for your records.

        Press space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent thankyou
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your participation
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  Routine Iunderstand
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        I understand and accept these terms.


        Press SPACE bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine zud1
    CodeComponent code_0
      Code Type = Auto->JS
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      Begin Routine:
        number_correct_l1=0
      End Routine:
        if key_resp_zud1.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
        #    print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
        #    trials_phase1.finished = True
        #else:
        #    print('flag!')
        #    trials_phase1.finished = False
    KeyboardComponent key_resp_zud1
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent zud1_corr2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent star_1
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle_1
      fillColor [set every repeat] = black
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_1
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_01
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_01
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_01
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine zud2
    TextComponent zud2_corr1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    CodeComponent code_1_l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_zud2.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    PolygonComponent triangle_2
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent star_2
      fillColor [set every repeat] = black
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_2
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_02
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_02
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_02
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine zud3
    TextComponent zud3_corr1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    CodeComponent code3l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_zud3.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    PolygonComponent triangle_3
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent star_3
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_3
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud3
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_03
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_03
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_03
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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
  Routine zud4
    TextComponent zud4_corr1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    CodeComponent code4l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_zud4.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    PolygonComponent triangle_4
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent star_4
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_4
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud4
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_04
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_04
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_04
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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
  Routine zud5
    CodeComponent code_zud5
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_zud5.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent zud5_corr3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent star_5
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_5
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_5
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud5
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_05
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_05
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_05
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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
  Routine zud6
    CodeComponent code_zud6
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_zud6.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent zud6_corr3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent star_6
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_6
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_6
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud6
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_06
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_06
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_06
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine zud7
    CodeComponent code_zud7
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_zud7.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent zud7_corr1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent rectangle_7
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_7
      fillColor [set every repeat] = white
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent star_7
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud7
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_07
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_07
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_07
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine zud8
    CodeComponent code_zud8
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_zud8.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent zud8_corr2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent star_8
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_8
      fillColor [set every repeat] = white
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_8
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_zud8
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_9
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_9
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_8
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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
  Routine start_2
    TextComponent text1
      color = purple
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please TYPE your answer using  keyboard.

        Allowed Keys: 1, 2, 3

        You will receive feedbacks in the next few trials.

        Press SPACE bar to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine proceed
    TextComponent text2
      color = darkorange
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will NOT receive feedbacks in the next few trials.

        Press SPACE bar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent blank500ms
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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
  Routine fb_zud1
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_zud1.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_zud1.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud1
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud1
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud01
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine fb_zud2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_zud2.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_zud2.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud2
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud2
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud02
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine fb_zud3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_zud3.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_zud3.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud3
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud3
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud03
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine fb_zud4
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  Routine fb_zud5
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  Routine fb_zud6
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  Routine fb_zud7
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  Routine fb_zud8
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_zud8.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_zud8.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud8
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud8
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud8
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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
  Routine dax9
    CodeComponent code_dax9
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax9.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax9_corr2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent star_9
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_9
      fillColor [set every repeat] = black
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_9
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax9
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_dax9
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_dax9.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_dax9.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine dax10
    CodeComponent code_dax10
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_zud7.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax10_corr1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent triangle_10
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_10
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent star_10
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax10
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_8
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_8
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_10
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_dax10
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_dax10.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_dax10.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_2
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_2
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_2
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine dax11
    CodeComponent dax11_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax11.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax11_corr3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent star_11
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_11
      fillColor [set every repeat] = white
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle_11
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax11
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_6
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_6
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_6
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_dax11
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_dax11.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_dax11.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_3
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_3
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_3
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine dax12
    CodeComponent cod_dax12
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax12.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax11_corr2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent star_12
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent tr_12
      fillColor [set every repeat] = white
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cr_12
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax12
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_7
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_7
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_7
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_dax12
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_dax12.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_dax12.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_4
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_4
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_4
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicket13
    KeyboardComponent key_resp_blicket13
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code5l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blicket13.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    TextComponent blicket1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket
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    PolygonComponent blicket_st_w
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_b
      fillColor [set every repeat] = white
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_bl_2
      fillColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_3
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_3
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicket13
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicket13.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicket13.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_5
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_5
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_5
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicket14
    KeyboardComponent key_resp_blicket14
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code6l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_blicket14.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    TextComponent blicket1_2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket
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    PolygonComponent blicket_st_w_2
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_b_2
      fillColor [set every repeat] = black
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent w_triange
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_4
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_4
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bltext
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicket14
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicket14.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicket14.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_6
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_6
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_6
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicket15
    KeyboardComponent key_resp_blicket15
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket
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    PolygonComponent blicket_st_b15
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_w15
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_5
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_5
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine fb_blicket15
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicket15.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicket15.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_7
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_7
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_7
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicket16
    KeyboardComponent key_resp_blicket16
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_4
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket
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    PolygonComponent blicket_st_b15_2
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_w15_2
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.2, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_6
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_6
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine fb_blicket16
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  Routine smicket17
    KeyboardComponent key_resp_smicket17
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code7l1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_smicket17.corr:
            number_correct_l1 = number_correct_l1 + 1

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    TextComponent blicket1_5
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket
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    PolygonComponent blicket_st_w_3
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_b_3
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent sm
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_7
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_7
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent smtext
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicket17
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicket17.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicket17.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_9
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_9
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_9
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicket18
    KeyboardComponent key_resp_smicket18
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code6l1_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp_smicket18.corr:
            number_correct_l1 = number_correct_l1 + 1
        print('number_Correct: ' + str(number_correct_l1))

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            t#rials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    TextComponent blicket1_6
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket
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    PolygonComponent blicket_st_w_4
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_b_4
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent sm2
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_8
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_8
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent smtext2
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicket18
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicket18.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicket18.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_10
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_10
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_10
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicket19
    KeyboardComponent key_resp_smicket19
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_7
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket
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    PolygonComponent blicket_st_b15_3
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_w15_3
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_9
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_9
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine fb_smicket19
    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicket19.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicket19.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_11
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_11
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_11
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicket20
    KeyboardComponent key_resp_smicket20
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_8
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket
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    PolygonComponent blicket_st_b20
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_w15_4
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.2, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_10
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_10
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine fb_smicket20
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  Routine blicketfep21
    TextComponent dax9_corr2_2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket fep
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    PolygonComponent star_13
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_12
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blicketfep21
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_2
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_2
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_2
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicketfep21
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicketfep21.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicketfep21.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_13
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_13
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_13
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicketfep22
    TextComponent dax9_corr2_3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket fep
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    PolygonComponent star_14
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_2
      fillColor [set every repeat] = black
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_13
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blicketfep22
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_3
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_3
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicketfep22
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicketfep22.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicketfep22.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_14
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_14
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_14
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicketfep23
    TextComponent dax9_corr2_4
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket fep
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    PolygonComponent star_15
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_3
      fillColor [set every repeat] = black
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_14
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blicketfep23
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_4
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_4
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_4
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicketfep23
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_blicketfep23.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_blicketfep23.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_15
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_15
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_15
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine blicketfep24
    TextComponent dax9_corr2_5
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket fep
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    PolygonComponent star_16
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_4
      fillColor [set every repeat] = black
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_15
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blicketfep24
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_5
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_5
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_5
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_blicketfep24
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  Routine smicketfep25
    TextComponent dax9_corr2_6
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket fep
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    PolygonComponent star_17
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_5
      fillColor [set every repeat] = white
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_16
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_smicketfep25
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_12
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_12
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_11
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicketfep25
    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicketfep25.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicketfep25.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_17
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_17
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_17
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicketfep26
    TextComponent dax9_corr2_7
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket fep
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    PolygonComponent star_18
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_6
      fillColor [set every repeat] = white
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_17
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_smicketfep26
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_13
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_13
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_12
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicketfep26
    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicketfep26.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicketfep26.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_18
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_18
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_18
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicketfep27
    TextComponent dax9_corr2_8
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket fep
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    PolygonComponent star_19
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_7
      fillColor [set every repeat] = white
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_18
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_smicketfep27
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_14
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_14
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_13
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicketfep27
    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_smicketfep27.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_smicketfep27.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_19
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_19
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_19
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine smicketfep28
    TextComponent dax9_corr2_9
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket fep
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    PolygonComponent star_20
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_8
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_19
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_smicketfep28
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_15
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_15
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_14
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_smicketfep28
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
  Routine dax12test2
    CodeComponent code_dax12test2
      Code Type = Auto->JS
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      Begin Routine:
        number_correct2 = 0
      End Routine:
        #''' update the number correct:'''
        if key_resp_dax12_2.corr:
            number_correct2 = number_correct2 + 1
            print('Correct2: ' + str(number_correct2))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct2 == 5:
            print('total Correct2: ' + str(number_correct2))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase_2.finished = True
        else:
            print('flag2!')
            trials_phase_2.finished = False
    TextComponent dax11_corr2_2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent star_21
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent tr
      fillColor [set every repeat] = white
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cr
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax12_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_16
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_16
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_15
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine blicket15test2
    CodeComponent code_blicket15test2
      Code Type = Auto->JS
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      End Routine:
        #''' update the number correct:'''
        if key_resp_blicket15_2.corr:
            number_correct2 = number_correct2 + 1
            print('Correct2: ' + str(number_correct2))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct2 == 5:
            print('total Correct2: ' + str(number_correct2))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase_2.finished = True
        else:
            print('flag2!')
            trials_phase_2.finished = False
    KeyboardComponent key_resp_blicket15_2
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_9
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket
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    PolygonComponent blicket_st_b15_4
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_w15_5
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_11
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_11
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine smicket18test2
    CodeComponent code_smicket16test2
      Code Type = Auto->JS
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      End Routine:
        #''' update the number correct:'''
        if key_resp_smicket18_2.corr:
            number_correct2 = number_correct2 + 1
            print('Correct2: ' + str(number_correct2))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct2 == 5:
            print('total Correct2: ' + str(number_correct2))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase_2.finished = True
        else:
            print('flag2!')
            trials_phase_2.finished = False
    KeyboardComponent key_resp_smicket18_2
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_10
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket
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    PolygonComponent blicket_st_w_5
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent blicket_st_b_5
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.2, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_12
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_12
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine blicketfep21test2
    CodeComponent code_blicketfep21test2
      Code Type = Auto->JS
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      End Routine:
        #''' update the number correct:'''
        if key_resp_blicketfep21_2.corr:
            number_correct2 = number_correct2 + 1
            print('Correct2: ' + str(number_correct2))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct2 == 5:
            print('total Correct2: ' + str(number_correct2))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase_2.finished = True
        else:
            print('flag2!')
            trials_phase_2.finished = False
    TextComponent dax9_corr2_10
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blicket fep
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    PolygonComponent star_22
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_10
      fillColor [set every repeat] = black
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_20
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_blicketfep21_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_17
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_17
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_16
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine smicketfep27test2
    CodeComponent code_blicketfep21test2_2
      Code Type = Auto->JS
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      End Routine:
        #''' update the number correct:'''
        if key_resp_smicketfep27_2.corr:
            number_correct2 = number_correct2 + 1
            print('Correct2: ' + str(number_correct2))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct2 == 5:
            print('total Correct2: ' + str(number_correct2))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase_2.finished = True
        else:
            print('flag2!')
            trials_phase_2.finished = False
    TextComponent dax9_corr2_11
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = smicket fep
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    PolygonComponent star_23
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_11
      fillColor [set every repeat] = white
      lineColor = black
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_21
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_smicketfep27_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_18
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_18
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_17
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine tas29
    CodeComponent code_dax9_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax9.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax9_corr2_12
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = tas
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    PolygonComponent star_24
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_12
      fillColor [set every repeat] = black
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_22
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_tas29
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_19
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_19
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_18
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_tas29
    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_tas29.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_tas29.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_21
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_21
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_21
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine test
    KeyboardComponent key_resp_t1_3
      allowedKeys [set every repeat] = '1','2'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent t1_zud_3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = zud
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    PolygonComponent t1_triangle1_3
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.2, 0)
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent t1_rectangle1_3
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.2, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent option1_critical_13
      letterHeight = 0.1
      pos = (-0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_13
      letterHeight = 0.1
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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  Routine tas30
    CodeComponent code_dax9_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax9.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax9_corr2_13
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = tas
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    PolygonComponent star_25
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_13
      fillColor [set every repeat] = black
      lineColor = black
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_23
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_tas30
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_20
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_20
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_19
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_tas30
    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_tas30.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_tas30.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_22
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_22
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_22
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine tas31
    CodeComponent code_dax9_4
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax9.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax9_corr2_14
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = tas
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    PolygonComponent star_26
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_14
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_24
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_tas31
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 1
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_21
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_21
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_20
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_tas31
    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_tas31.keys :
            msg="Allowed Keys: 1, 2, 3"
            msg1=""
            msg0=""
        elif key_resp_tas31.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_dax9_23
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_dax9_23
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_dax9_23
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine tas32
    CodeComponent code_dax9_5
      Code Type = Auto->JS
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      Begin Experiment:
        msg1='yeah!'
        msg0='doh!'
      Begin Routine:
        #if not key_resp1.keys:
        #    msg="Allowed Keys: 1,2,3"
        if key_resp_dax9.corr: #stored on last run routine
            msg1="Correct!"
            msg0=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
    TextComponent dax9_corr2_15
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = tas
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    PolygonComponent star_27
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_15
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_25
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_tas32
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_22
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_22
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_21
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine fb_tas32
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  Routine phase2
    TextComponent p2
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = Phase 2
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  Routine phase3
    TextComponent p3
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = Phase 3
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  Routine phase1
    TextComponent text
      color = blue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = Phase 1
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  Routine test2dax9
    CodeComponent code_dax9_6
      Code Type = Auto->JS
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      Begin Routine:
        number_correct3 = 0
      End Routine:
        #''' update the number correct:'''
        if key_resp_dax9_2.corr:
            number_correct3 = number_correct3 + 1
            print('Correct3: ' + str(number_correct3))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct3 == 2:
            print('total Correct2: ' + str(number_correct3))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase3.finished = True
        else:
            print('flag2!')
            trials_phase3.finished = False
    TextComponent dax9_corr2_16
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = dax
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    PolygonComponent star_28
      fillColor [set every repeat] = black
      lineColor = black
      pos = (-0.5, 0)
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_16
      fillColor [set every repeat] = black
      lineColor = black
      shape = triangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_26
      fillColor [set every repeat] = black
      lineColor = black
      pos = (0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_dax9_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_23
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_23
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_22
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine test2tas32
    CodeComponent code_dax9_7
      Code Type = Auto->JS
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      End Routine:
        #''' update the number correct:'''
        if key_resp_tas32_2.corr:
            number_correct3 = number_correct3 + 1
            print('Correct3: ' + str(number_correct3))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        if number_correct3 == 2:
            print('total Correct2: ' + str(number_correct3))
        # ''' terminate the outer loop so no more practice happens:'''
            trials_phase3.finished = True
        else:
            print('flag2!')
            trials_phase3.finished = False
    TextComponent dax9_corr2_17
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = tas
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    PolygonComponent star_29
      fillColor [set every repeat] = white
      lineColor = black
      pos = (-0.5, 0)
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent triange_17
      fillColor [set every repeat] = white
      lineColor = black
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent cross_27
      fillColor [set every repeat] = white
      lineColor = black
      pos = (0.5, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_tas32_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent option1_24
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_24
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent option3_23
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Suppose you are on Mars, and in order to communicte with aliens, you will learn their language. You will learn by feedback. You will see displays with fake words. They are used for describing colors and shapes, which are illustrated by the images.

        Below is a group of word and images. Your task is to guess the meaning and to decide which image the word refers to.

        Example: word "bos". It can be USED BY ITSELF to refer to an object.
    PolygonComponent polygon
      fillColor = white
      nVertices = 5
      pos = (-0.2, 0)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent polygonblack
      fillColor = black
      nVertices = 5
      pos = (0.2, 0)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.03
      pos = (-0.2, -0.1)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0.2, -0.1)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_6
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        For this example, suppose "bos" means empty or white, when you TYPE 1 on your keyboard, you receive feedback "Correct".

        For the learning part, you will receive prompts "Correct"/"Incorrect". Sometimes you will be tested on the words you have learned. You will not receive any feedback.

        Sometimes, the task will seem very easy. Sometimes, it will seem trickier if not entirely arbitrary. This is not an IQ test and there may not always be a proper, unambiguous answer. What matters the most to us is that you follow your instinct and report your intuition, especially in these cases where it seems that you have to guess.

        Press SPACE bar to start the Practice.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = bos
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  Routine practice_trial_end
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of the practice!

        Now let’s start the real experiment!

        Press spacebar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fb_bosa1
    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_bosa.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_bosa.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud1_2
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud1_2
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud01_2
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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
  Routine bosa1
    KeyboardComponent key_resp_bosa
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_bosa1
      Code Type = Auto->JS
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      End Routine:
        if key_resp_bosa.corr:
            number_correct_l1 = number_correct_l1 + 1
        print('number_Correct: ' + str(number_correct_l1))

        #if number_correct_l1 == 12 :
            #print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            #trials_phase1.finished = True
        #else:
            #print('flag!')
            #trials_phase1.finished = False
    TextComponent blicket1_11
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = bosa
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    TextComponent option1_critical_14
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_14
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bosa3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent polygon_5
      fillColor = grey
      nVertices = 5
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor = purple
      nVertices = 6
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_7
      fillColor = gold
      nVertices = 6
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine bosa2
    KeyboardComponent key_resp_bosa2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 2
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_bosa2.corr:
            number_correct_l1 = number_correct_l1 + 1
        print('number_Correct: ' + str(number_correct_l1))

        if number_correct_l1 == 12 :
            print('total Correct: ' + str(number_correct_l1))
            # ''' terminate the outer loop so no more practice happens:'''
            trials_phase1.finished = True
        else:
            print('flag!')
            trials_phase1.finished = False
    TextComponent blicket1_13
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = bosa
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    TextComponent option1_critical_16
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_16
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bosa2text2
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent polygon_2
      fillColor = purple
      nVertices = 6
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = gold
      nVertices = 6
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = grey
      nVertices = 6
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine fb_bosa2
    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_bosa2.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_bosa2.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud1_3
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud1_3
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud01_3
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine bosap1
    KeyboardComponent key_resp_bosa_2
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_bosa1_2
      Code Type = Auto->JS
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      Begin Routine:
        number_correct_bosap=0
      End Routine:
        #''' update the number correct:'''
        if key_resp_bosa_2.corr:
            number_correct_bosap = number_correct_bosap + 1
        #    print('number_correct_bosap: ' + str(number_correct_bosap))
        #     ''' if this is the final repetition, check the proportion correct.
        #         (am avoiding hard coding the value '12' for flexibility):'''
        #if number_correct_bosap == 2:
        #    print('total Correct: ' + str(number_correct_bosap))
        # ''' terminate the outer loop so no more practice happens:'''
        #    trials_practice.finished = True
        #else:
        #    print('flag2!')
        #    trials_practice.finished = False
    TextComponent blicket1_14
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = bosa
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    TextComponent option1_critical_17
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_17
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bosa3_2
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent polygon_8
      fillColor = grey
      nVertices = 5
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = purple
      nVertices = 6
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor = gold
      nVertices = 6
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine start_practice
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press SPACE bar to start the PRACTICE.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fb_bosap1
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_bosa_2.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_bosa_2.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud1_4
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud1_4
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud01_4
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine fb_bosap2
    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Experiment:
        msg1=""
        msg0=""
        msg=""
      Begin Routine:
        if not key_resp_bosa_3.keys:
            msg="Allowed Keys: 1, 2, 3"
        elif key_resp_bosa_3.corr:   #stored on last run routine
            msg1="Correct!"
            msg0=""
            msg=""
        else:
            msg0="Oops! That was wrong"
            msg1=""
            msg=""
    TextComponent feedback1_zud1_5
      color = darkgreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $msg1
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    TextComponent feedback0_zud1_5
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg0
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    TextComponent feedback_zud01_5
      color = darkred
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine bosap2
    KeyboardComponent key_resp_bosa_3
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_bosa1_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_bosa_3.corr:
            number_correct_bosap = number_correct_bosap + 1
            print('number_Correct: ' + str(number_correct_bosap))

        if number_correct_bosap == 2 :
            print('total Correct: ' + str(number_correct_bosap))
            # ''' terminate the outer loop so no more practice happens:'''
            trials_practice.finished = True
        else:
            print('flag!')
            trials_practice.finished = False
    TextComponent blicket1_15
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = bosa
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    TextComponent option1_critical_18
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_18
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bosa3_3
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent polygon_11
      fillColor = grey
      nVertices = 5
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_12
      fillColor = purple
      nVertices = 6
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_13
      fillColor = gold
      nVertices = 6
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine bosap_test
    KeyboardComponent key_resp_bosa_4
      allowedKeys [set every repeat] = '1','2','3'
      correctAns [set every repeat] = 3
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent blicket1_16
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = bosa
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    TextComponent option1_critical_19
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent option2_critical_19
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent bosa3_4
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 3
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    PolygonComponent polygon_14
      fillColor = grey
      nVertices = 5
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_15
      fillColor = purple
      nVertices = 6
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_16
      fillColor = gold
      nVertices = 6
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine Iunderstand
  Routine blank
  Routine instruction
  Routine start_practice
  Routine start_2
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine bosap1
    Routine fb_bosap1
    Routine bosap2
    Routine fb_bosap2
  LoopTerminator trials_practice
  Routine proceed
  Routine bosap_test
  Routine practice_trial_end
  Routine phase1
  Routine start_2
  LoopInitiator trials_phase1 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine blank
    Routine zud1
    Routine fb_zud1
    Routine zud2
    Routine fb_zud2
    Routine zud3
    Routine fb_zud3
    Routine zud4
    Routine fb_zud4
    Routine blicket13
    Routine fb_blicket13
    Routine blicket14
    Routine fb_blicket14
    Routine smicket17
    Routine fb_smicket17
    Routine smicket18
    Routine fb_smicket18
    Routine bosa1
    Routine fb_bosa1
    Routine bosa2
    Routine fb_bosa2
    Routine bosa1
    Routine fb_bosa1
    Routine bosa2
    Routine fb_bosa2
  LoopTerminator trials_phase1
  Routine proceed
  Routine blank
  Routine test
  Routine phase2
  LoopInitiator trials_phase_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine start_2
    Routine zud1
    Routine fb_zud1
    Routine zud2
    Routine fb_zud2
    Routine zud3
    Routine fb_zud3
    Routine zud4
    Routine fb_zud4
    Routine blicket13
    Routine dax9
    Routine fb_dax9
    Routine dax10
    Routine fb_dax10
    Routine dax11
    Routine fb_dax11
    Routine dax12
    Routine fb_dax12
    Routine blicket13
    Routine fb_blicket13
    Routine blicket14
    Routine fb_blicket14
    Routine blicket15
    Routine fb_blicket15
    Routine blicket16
    Routine fb_blicket16
    Routine smicket17
    Routine fb_smicket17
    Routine smicket18
    Routine fb_smicket18
    Routine smicket19
    Routine fb_smicket19
    Routine smicket20
    Routine fb_smicket20
    Routine blicketfep21
    Routine fb_blicketfep21
    Routine blicketfep22
    Routine fb_blicketfep22
    Routine blicketfep23
    Routine fb_blicketfep23
    Routine blicketfep24
    Routine fb_blicketfep24
    Routine smicketfep25
    Routine fb_smicketfep25
    Routine smicketfep26
    Routine fb_smicketfep26
    Routine smicketfep27
    Routine fb_smicketfep27
    Routine smicketfep28
    Routine fb_smicketfep28
    Routine proceed
    LoopInitiator trials_test2 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine dax12test2
      Routine blicket15test2
      Routine smicket18test2
      Routine blicketfep21test2
      Routine smicketfep27test2
    LoopTerminator trials_test2
  LoopTerminator trials_phase_2
  Routine proceed
  Routine blank
  Routine test
  Routine phase3
  LoopInitiator trials_phase3 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine start_2
    Routine zud1
    Routine fb_zud1
    Routine zud2
    Routine fb_zud2
    Routine zud3
    Routine fb_zud3
    Routine zud4
    Routine fb_zud4
    Routine zud5
    Routine fb_zud5
    Routine zud6
    Routine fb_zud6
    Routine zud7
    Routine fb_zud7
    Routine zud8
    Routine fb_zud8
    Routine dax9
    Routine fb_dax9
    Routine dax10
    Routine fb_dax10
    Routine dax11
    Routine fb_dax11
    Routine dax12
    Routine fb_dax12
    Routine tas29
    Routine fb_tas29
    Routine tas30
    Routine fb_tas30
    Routine tas31
    Routine fb_tas31
    Routine tas32
    Routine fb_tas32
    Routine proceed
    LoopInitiator trials_test3 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine test2dax9
      Routine test2tas32
    LoopTerminator trials_test3
  LoopTerminator trials_phase3
  Routine proceed
  Routine blank
  Routine test
  Routine end
